PsychoPy2experiment version="2021.1.4"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=4444F7D7
  Experiment info = {'participant': '', 'session': '001', 'study_id': ''}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['instr_prac_items/instr0.png', 'instr_prac_items/instr1.png', 'instr_prac_items/instr2.png', 'instr_prac_items/instr3.png', 'instr_prac_items/instr4.png', 'instr_prac_items/instr5.png', 'instr_prac_items/instr6.png', 'instr_prac_items/instr7.png', 'info1.png', 'info2.png', 'info3.png', 'info4.png']
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 800]
  color = $(0.7000, 0.7000, 0.7000)
  expName = risk1
  logging level = debug
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Routines
  Routine trial
    TextComponent title_text
      color = black
      letterHeight = 0.03
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $title
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    CodeComponent counter_code
      Code Type = Auto->JS
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      Begin Experiment:
        trial_counter = 0
        counter_text = None
      Begin Routine:
        trial_counter = trial_counter + 1
        counter_text = "Trial " + str(trial_counter) + " of 60"
    TextComponent trial_counter_text
      color = black
      letterHeight = 0.03
      pos = (0.5, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $counter_text
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    TextComponent scenario_text
      color = black
      letterHeight = 0.03
      pos = (-0.57, 0.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $scenario
      wrapWidth = 1.2
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    TextComponent graph_intro
      color = black
      letterHeight = 0.03
      pos = (-0.57, 0.31)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $graph_cat
      wrapWidth = 1.2
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    ImageComponent graph
      image [set every repeat] = $img
      pos = (-0.35, -0.07)
      saveStartStop = False
      size = (0.45, 0.63)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent if_text
      color = black
      letterHeight = 0.03
      pos = (-0.05, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $if_phrase
      wrapWidth = 0.65
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    TextComponent chance_question
      color = black
      letterHeight = 0.03
      pos = (-0.05, 0.08)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $chance_cat
      wrapWidth = 0.65
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    TextComponent severity_question
      color = black
      letterHeight = 0.03
      pos = (-0.05, -0.17)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $severity_cat
      wrapWidth = 0.65
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    SliderComponent chance_slider
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = 'Very\nunlikely','Very\nlikely'
      letterHeight = 0.02
      pos = (0.25, 0.02)
      saveStartStop = False
      size = (0.6, 0.025)
      startVal [time (s)] = 0.0
      styles = ['triangleMarker']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent severity_slider
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = 'Very\nmild','Very\nsevere'
      letterHeight = 0.02
      pos = (0.25, -0.25)
      saveStartStop = False
      size = (0.6, 0.025)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent spacebar_reminder
      color = black
      letterHeight = 0.03
      pos = (0, -0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue when you have made your response.
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    KeyboardComponent key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [condition] = all_ratings
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    CodeComponent code_5
      Code Type = Both
      Begin JS Routine:
        all_ratings = false;
        scenario_text.setAlignHoriz('left')
        graph_intro.setAlignHoriz('left')
        if_text.setAlignHoriz('left')
        chance_question.setAlignHoriz('left')
        severity_question.setAlignHoriz('left')
      Begin Routine:
        all_ratings = False
      Each Frame:
        all_ratings = (chance_slider.rating != None) & (severity_slider.rating != None)
      Each JS Frame:
        all_ratings = (chance_slider.rating >0) & (severity_slider.rating > 0);
  Routine extra_question
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        EnableKeyboard = False
      Each Frame:
        EnableKeyboard = followup_slider.rating or not follow_up
    KeyboardComponent spacebar
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = EnableKeyboard
      store = nothing
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    SliderComponent followup_slider
      forceEndRoutine = False
      granularity = 1
      labels = 'A', 'B', 'C', 'D'
      letterHeight = 0.05
      pos = (0, -0.1)
      saveStartStop = False
      size = (0.6, 0.03)
      startVal [condition] = $follow_up
      storeRatingTime = False
      styles = ['radio']
      ticks = (1, 2, 3, 4)
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    TextComponent next_trial
      letterHeight [set every repeat] = $next_trial_size
      pos [set every repeat] = $next_trial_pos
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the spacebar to move on to the next trial.
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    TextComponent followup_options
      letterHeight = 0.04
      pos = (0, 0.1)
      saveStartStop = False
      startVal [condition] = $follow_up
      text [set every repeat] = $follow_up_options
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    TextComponent followup_question
      letterHeight = 0.05
      pos = (0, 0.3)
      saveStartStop = False
      startVal [condition] = $follow_up
      text = What was the graph you just viewed about?
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  Routine instructions
    TextComponent title_text_2
      color = black
      letterHeight = 0.035
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions
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    ImageComponent instructions_image
      image [set every repeat] = $instructions_img
      pos = (0, -0.1)
      saveStartStop = False
      size = (1.1, 0.7)
      startVal [time (s)] = 0.0
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    PolygonComponent border
      fillColor = None
      lineColor = black
      lineWidth = 2
      opacity = 0.1
      pos = instructions_image.pos
      saveStartStop = False
      shape = rectangle
      size = (instructions_image.size[0], instructions_image.size[1])
      startVal [time (s)] = 0.0
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    TextComponent instr_text
      color = black
      letterHeight = 0.035
      pos = (-0.55, 0.34)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $instructions_text
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    KeyboardComponent spacebar_continue
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent instr_spacebar
      color = black
      letterHeight = 0.025
      pos = (0.6, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press the spacebar
        to move on to
        the next slide.
    PolygonComponent spacebar_box
      fillColor = darkgrey
      lineColor = black
      opacity = 0.25
      pos = instr_spacebar.pos
      saveStartStop = False
      shape = rectangle
      size = (0.23, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent counter_2
      color = black
      letterHeight = 0.025
      pos = (0.6, 0.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $slide_counter
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    CodeComponent text_align_3
      Code Type = Both
      Begin JS Routine:
        instr_text.setAlignHoriz('left')
  Routine pause
    TextComponent break_text
      color = black
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Take a break or press the spacebar to continue to the next trial.
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    KeyboardComponent break_spacebar
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine literacy
    TextComponent literacy_top
      color = black
      letterHeight = 0.03
      pos = (-0.7, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please answer the following questions about using graphs and charts. Click on the slider next to each question to indicate your response. Press the spacebar when you have finished:
      wrapWidth = 1.3
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    TextComponent questions_text
      color = black
      letterHeight = 0.03
      pos = (-0.7, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 0.75
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      text:
        How good are you at working with bar charts?



        How good are you at working with line plots?



        How good are you at working with pie charts?



        How good are you at inferring the size of a bar in a bar chart?



        How good are you at determining the difference between two bars in a bar chart?
    SliderComponent q1_slider
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = 'Not at \n all good', 'Extremely \n good'
      letterHeight = 0.02
      pos = (0.39, 0.27)
      saveStartStop = False
      size = (0.55, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent q2_slider
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = 'Not at \n all good', 'Extremely \n good'
      letterHeight = 0.02
      pos = (0.39, 0.13)
      saveStartStop = False
      size = (0.55, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent q3_slider
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = 'Not at \n all good', 'Extremely \n good'
      letterHeight = 0.02
      pos = (0.39, -0.02)
      saveStartStop = False
      size = (0.55, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent q4_slider
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = 'Not at \n all good', 'Extremely \n good'
      letterHeight = 0.02
      pos = (0.39, -0.16)
      saveStartStop = False
      size = (0.55, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    SliderComponent q5_slider
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = 'Not at \n all good', 'Extremely \n good'
      letterHeight = 0.02
      pos = (0.39, -0.33)
      saveStartStop = False
      size = (0.55, 0.03)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6)
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    KeyboardComponent spacebar_continue_4
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = all_ratings
      store = nothing
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    CodeComponent code_3
      Code Type = Both
      Begin JS Routine:
        all_ratings = false;
        questions_text.setAlignHoriz('left')
        literacy_top.setAlignHoriz('left')
      Begin Routine:
        all_ratings = False
        questions_text.alignText = 'right'
      Each Frame:
        all_ratings = (q1_slider.rating != None) & (q2_slider.rating != None) & (q3_slider.rating != None) & (q4_slider.rating != None) & (q5_slider.rating != None)
      Each JS Frame:
        all_ratings = (((((q1_slider.rating > 0) & (q2_slider.rating > 0)) & (q3_slider.rating > 0)) & (q4_slider.rating > 0)) & (q5_slider.rating > 0));
  Routine warning
    TextComponent warning_text
      color = black
      letterHeight = 0.035
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The information you are about to see concerns data about various risks, (e.g. losing money, experiencing side effects from medication, or becoming ill). Should any of this information distress you, please feel free to take a break at any point during the experiment. If you prefer, you are free to leave the experiment at any point, by pressing the ‘Escape’ key. This will not incur detriment to you and none of your data will be saved (however, this means that you will not be paid for your participation).
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    KeyboardComponent spacebar_continue_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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    TextComponent spacebar_reminder_2
      color = black
      letterHeight = 0.025
      pos = (0, -0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue.
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    CodeComponent text_align_2
      Code Type = Both
      Begin JS Routine:
        warning_text.setAlignHoriz('left')
  Routine debrief
    TextComponent debrief_text
      color = black
      letterHeight = 0.04
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = IMPORTANT: Please read the following information carefully. Your submission is not yet completed, so please do not quit the experiment. You must continue to the next page and follow additional instructions after reading the information below, so that your submission can be completed. Please note that all the information presented in this experiment was fictional. We hope that you have not been upset by any aspect of this experiment. However, if you have found any part of this experience to be distressing, please take the time to allow your mood to return to a baseline level. You may want to sit in a quiet and comfortable space, have a drink of water, or engage in an activity that you enjoy. If you would like more information on this study, please contact the researchers by sending a message on Prolific.
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    KeyboardComponent spacebar_continue_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 3
      store = nothing
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    TextComponent spacebar_debrief
      color = black
      letterHeight = 0.025
      pos = (0, -0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue.
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    CodeComponent text_align_4
      Code Type = Both
      Begin JS Routine:
        debrief_text.setAlignHoriz('left')
  Routine practice
    TextComponent title_practice
      color = black
      letterHeight = 0.03
      pos = (0, 0.43)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $title
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    TextComponent scenario_practice
      color = black
      letterHeight = 0.03
      pos = (-0.57, 0.38)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $scenario
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    TextComponent graph_intro_practice
      color = black
      letterHeight = 0.03
      pos = (-0.57, 0.31)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $graph_cat
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    ImageComponent graph_practice
      image [set every repeat] = $img
      pos = (-0.35, -0.07)
      saveStartStop = False
      size = (0.45, 0.63)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    TextComponent if_text_practice
      color = black
      letterHeight = 0.03
      pos = (-0.05, 0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $if_phrase
      wrapWidth = 0.6
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    TextComponent chance_question_practice
      color = black
      letterHeight = 0.03
      pos = (-0.05, 0.08)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $chance_cat
      wrapWidth = 0.6
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    TextComponent severity_question_practice
      color = black
      letterHeight = 0.03
      pos = (-0.05, -0.17)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $severity_cat
      wrapWidth = 0.6
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    SliderComponent chance_slider_practice
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = 'Very\nunlikely','Very\nlikely'
      letterHeight = 0.02
      pos = (0.25, 0.02)
      saveStartStop = False
      size = (0.6, 0.025)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['triangleMarker']
      ticks = (1,2,3,4,5,6,7)
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    SliderComponent severity_slider_practice
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = 'Very\nmild','Very\nsevere'
      letterHeight = 0.02
      pos = (0.25, -0.25)
      saveStartStop = False
      size = (0.6, 0.025)
      startVal [time (s)] = 0.0
      storeRating = False
      storeRatingTime = False
      styles = ['rating']
      ticks = (1, 2, 3, 4, 5, 6, 7)
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    TextComponent spacebar_reminder_practice
      color = black
      letterHeight = 0.03
      pos = (0, -0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue when you have made your response.
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    KeyboardComponent key_resp_practice
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = all_ratings
      store = nothing
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    CodeComponent code_4
      Code Type = Both
      Begin JS Routine:
        all_ratings = false;
        scenario_practice.setAlignHoriz('left')
        graph_intro_practice.setAlignHoriz('left')
        if_text_practice.setAlignHoriz('left')
        chance_question_practice.setAlignHoriz('left')
        severity_question_practice.setAlignHoriz('left')
      Begin Routine:
        all_ratings = False
      Each Frame:
        all_ratings = (chance_slider_practice.rating != None) & (severity_slider_practice.rating != None)
      Each JS Frame:
        all_ratings = (chance_slider_practice.rating > 0) & (severity_slider_practice.rating > 0);
  Routine intro
    TextComponent intro_text2
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Your browser should now be in full-screen mode. Please do not exit full-screen mode.

        Please read the following information sheet. Press the spacebar to continue.
    KeyboardComponent intro_continue2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine info_sheet_2
    CodeComponent info_sheet_code
      Code Type = Auto->JS
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      Begin Experiment:
        current_display = 1
      Begin Routine:
        current_str = str(current_display)

        display_this = "info" + current_str + ".png"

        intro_counter_text = "Page " + current_str + " of 4"
      Each Frame:
        if end_loop.keys == 'space':
            continueRoutine = False
      End Routine:
        if info_sheet_move.keys == 'right' and current_display < 4:
            current_display = current_display + 1
        elif info_sheet_move.keys == 'left' and current_display > 1:
            current_display = current_display - 1

        if end_loop.keys == 'space':
            info_sheet_loop.finished = True
    KeyboardComponent end_loop
      allowedKeys = 'space',
      correctAns = $'space',
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent info_sheet_image
      image [set every repeat] = $display_this
      pos = (0, 0.1)
      saveStartStop = False
      size = (0.9, 0.75)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    KeyboardComponent info_sheet_move
      allowedKeys = 'left','right'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    TextComponent counter
      color = black
      letterHeight = 0.03
      pos = (0, -0.34)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $intro_counter_text
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    TextComponent move_text_
      color = black
      letterHeight = 0.035
      pos = (0, -0.39)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Use your arrow keys ← → to view the next page (or previous page).
      wrapWidth = 1.5
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    TextComponent info_sheet_next
      color = black
      letterHeight = 0.025
      pos = (0, -0.45)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = If you do not wish to continue, press ‘Escape’ to quit the experiment.
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  Routine intro_consent
    TextComponent intro_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you.

        Press the spacebar to continue to the consent form.
    KeyboardComponent intro_continue
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0
      store = nothing
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  Routine consent
    KeyboardComponent consent_key
      allowedKeys = 'y',
      correctAns = $'y',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
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    TextComponent keypress_instructions
      color = black
      letterHeight = 0.03
      pos = (0, -0.33)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Press ‘y’ if you consent to the above.
        Otherwise, press ‘Escape’ to quit the experiment.
    TextComponent item_text
      color = black
      letterHeight = 0.04
      pos = (-0.5, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $consent_item
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    CodeComponent text_align
      Code Type = Both
      Begin JS Routine:
        item_text.setAlignHoriz('left')
  Routine final
    TextComponent final_text
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        The experiment has now finished.

        Please press the spacebar and follow the instructions to complete your submission.

        Thank you for taking part.
    KeyboardComponent final_keypress
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 1
      store = nothing
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  Routine practice_end
    TextComponent text
      color = black
      letterHeight = 0.04
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = The practice has now finished. The experiment will start when you press the spacebar.
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    KeyboardComponent key_resp_2
      allowedKeys = 'space',
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine demographics
    TextboxComponent age_textbox
      bold = False
      borderColor = black
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.03
      pos = (0, 0.2)
      saveStartStop = False
      size = (0.1, 0.06)
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        correct_keys = ['1','2','3','4','5','6','7','8','9','0']
        enable_spacebar = False
      Each Frame:
        if (len(age_textbox.text) > 0):
            if age_textbox.text[-1] not in correct_keys:
                age_textbox.text = age_textbox.text[0:-1]

        if (len(age_textbox.text) > 1) & (gender_slider.rating != None):
            enable_spacebar = True
    TextComponent age_text
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Enter your age in years (e.g. 21):
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    TextComponent gender_text
      color = black
      letterHeight = 0.04
      pos = (0, -0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Select your gender from the options below:
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    SliderComponent gender_slider
      borderColor = black
      color = black
      forceEndRoutine = False
      granularity = 1
      labels = 'Female', 'Male', 'Non-binary'
      letterHeight = 0.03
      pos = (0, -0.2)
      saveStartStop = False
      size = (0.4, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = radio
      ticks = (1, 2, 3)
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    TextComponent spacebar_demographics
      color = black
      letterHeight = 0.025
      pos = (0, -0.42)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Press the spacebar to continue when you have answered both questions.
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    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [condition] = enable_spacebar
      store = nothing
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Flow
  Routine intro
  LoopInitiator info_sheet_loop loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 100
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    Routine info_sheet_2
  LoopTerminator info_sheet_loop
  LoopInitiator consent_loop loopType="TrialHandler"
    conditionsFile = consent.csv
    loopType = sequential
    nReps = 1
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    Routine consent
  LoopTerminator consent_loop
  Routine warning
  Routine demographics
  Routine literacy
  LoopInitiator instructions_loop loopType="TrialHandler"
    conditionsFile = instructions.csv
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('instructions_text', '1. This experiment is about situations that involve risks. In each trial, you will be asked to assess the information presented, and then make judgements about the situation. '), ('slide_counter', 'Slide 1 of 10'), ('instructions_img', 'instr_prac_items/instr0.png')]),
      OrderedDict([('instructions_text', '2. First, you should read the scenario, which will outline the situation and explain what the graph shows.'), ('slide_counter', 'Slide 2 of 10'), ('instructions_img', 'instr_prac_items/instr1.png')]),
      OrderedDict([('instructions_text', '3. Then, you should look at the graph, which will show the probability of the undesirable situation occurring. '), ('slide_counter', 'Slide 3 of 10'), ('instructions_img', 'instr_prac_items/instr2.png')]),
      OrderedDict([('instructions_text', '4. After this, you should rate how likely it is that the undesirable situation would occur. When you click on the scale, a red circle will appear. '), ('slide_counter', 'Slide 4 of 10'), ('instructions_img', 'instr_prac_items/instr3.png')]),
      OrderedDict([('instructions_text', '5. You should position the red circle so that your response matches your personal judgement of the chance as closely as possible.'), ('slide_counter', 'Slide 5 of 10'), ('instructions_img', 'instr_prac_items/instr4.png')])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
    Routine instructions
  LoopTerminator instructions_loop
  LoopInitiator practice_loop loopType="TrialHandler"
    conditionsFile = practice.csv
    loopType = sequential
    nReps = 1
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    Routine practice
  LoopTerminator practice_loop
  Routine practice_end
  LoopInitiator list_picker loopType="TrialHandler"
    conditionsFile = conditionB.csv
    loopType = sequential
    nReps = 1
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $list
      loopType = random
      nReps = 1
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      Routine trial
    LoopTerminator trials
  LoopTerminator list_picker
  Routine debrief
  Routine final
